<PlusConfiguration version="2.5">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet
      Name="PlusServer: TEST EM AND OP"
      Description="Broadcasting tracking data through OpenIGTLink."
    />
    <Device
      Id="OpTrackerDevice"
      Type="OptiTrack"
      ToolReferenceFrame="OpTracker" 
      ProjectFile="C:\Users\Tamas\Desktop\SensorAccuracyFinal\Good_optiTrack.ttp"
      AttachToRunningMotive="TRUE"
      LocalTimeOffsetSec="0.05" 
	  MotiveDataDescriptionsUpdateTimeSec="1.0" >
      <DataSources>
        <DataSource Type="Tool" Id="OpPointer" />
		<DataSource Type="Tool" Id="OpRef" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="OpTrackerStream">
        <DataSource Type="Tool" Id="OpPointer" />
        <DataSource Type="Tool" Id="OpRef" />
        </OutputChannel>
      </OutputChannels>
    </Device>
    <Device
      Id="EmTrackerDevice" 
      Type="Ascension3DG" 
      AcquisitionRate="50" 
      LocalTimeOffsetSec="0.0" 
      FilterAcWideNotch="1"
      ToolReferenceFrame="EmTracker">
      <DataSources>
		<DataSource Type="Tool" Id="EmPointer" BufferSize="500" PortName="2" AveragedItemsForFiltering="20" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="EMTrackerStream" >
          <DataSource Id="EmPointer"/>
        </OutputChannel>
      </OutputChannels>
     </Device>
<Device Id="CombinedTracker" Type="VirtualMixer">
      <InputChannels>
        <InputChannel Id="OpTrackerStream" />
        <InputChannel Id="EmTrackerStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="CombinedTrackerStream" />
      </OutputChannels>
    </Device>
  </DataCollection>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="TRUE"
    OutputChannelId="CombinedTrackerStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="OpPointerToOpRef" />
        <Transform Name="EmPointerToEmTracker" />
		<Transform Name="OpPointerToOpTracker" />
		
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>